PsychoPy2experiment version="1.78.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'                   uid': u'001', u'            session': u'001'}
  expName = Melody Memory Task
  Units = use prefs
  Screen = 1
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Routines
  Routine pause
    TextComponent pausetext
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of experiment.

        Thanks for participating!

        Please press the space bar to close the experiment.
    KeyboardComponent end_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    TextComponent text_start
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Gold-MSI Melody Memory Test

        If you have read the instructions and don't have any questions, then click SPACE BAR to start the test.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    SoundComponent sound_2
      sound [set every repeat] = $sound2
      stopVal [duration (s)] = sound_2.getDuration()
      startVal [time (s)] = 0.0
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    TextComponent text_sound2
      text = 2
      stopVal [duration (s)] = sound_2.getDuration()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    CodeComponent melmemcode
      Begin Experiment:
        sound_1 = sound.Sound('A',secs=1)
        sound_2 = sound.Sound('B',secs=1)
    SoundComponent sound_1
      sound [set every repeat] = $sound1
      stopVal [duration (s)] = sound_1.getDuration()
      startVal [time (s)] = 0.0
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    TextComponent text_sound1
      text = 1
      stopVal [duration (s)] = sound_1.getDuration()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine decide
    TextComponent decide_text
      wrapWidth = 80
      durationEstim = 10
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Was the second tune the same melody as the first,
        despite being played at a diferent pitch?
    RatingScaleComponent judgement
      pos = 0, 0.4
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      choiceLabelsAboveLine = False
      forceEndRoutine = True
      low = 1
      durationEstim = 10
      categoryChoices = DIFFERENT,SAME
      singleClick = True
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    TextComponent text
      wrapWidth = 80
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        How sure are you about this answer?
        1 = I'm guessing. 2 = I think so. 3 = I'm totally sure.
    RatingScaleComponent confidence
      pos = 0, -0.4
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      choiceLabelsAboveLine = False
      forceEndRoutine = True
      low = 1
      durationEstim = 10
      categoryChoices = 1,2,3
      singleClick = True
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  Routine instructions
    TextComponent text_instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_instructions
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MelodyMemory_v10.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'sound1': u'MelodyMemory_v10/1_Deck_original_F.wav', 'sound2': u'MelodyMemory_v10/1_Deck_nearby_C_violate_inkey.wav', 'true_answer': 0},
      {'sound1': u'MelodyMemory_v10/11_WeWish_original_D.wav', 'sound2': u'MelodyMemory_v10/11_WeWish_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/12_YankeeDaddy_original_G.wav', 'sound2': u'MelodyMemory_v10/12_YankeeDaddy_distant_Ab_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/13_PDeck_original_C.wav', 'sound2': u'MelodyMemory_v10/13_PDeck_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/14_PDoremi_original_Bb.wav', 'sound2': u'MelodyMemory_v10/14_PDoremi_nearby_F_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/15_PGodBless_original_Eb.wav', 'sound2': u'MelodyMemory_v10/15_PGodBless_nearby_Bb_violate_inkey.wav', 'true_answer': 0},
      {'sound1': u'MelodyMemory_v10/20_PMyCountry_original_E.wav', 'sound2': u'MelodyMemory_v10/20_PMyCountry_distant_Eb_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/25_PHappyBirthday_original_C.wav', 'sound2': u'MelodyMemory_v10/25_PHappyBirthday_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/26_PJingle_original_Bb.wav', 'sound2': u'MelodyMemory_v10/26_PJingle_nearby_F_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/27_POCome_original_C.wav', 'sound2': u'MelodyMemory_v10/27_POCome_distant_violate_inkey_D.wav', 'true_answer': 0}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
    Routine pause
    Routine trial
    Routine pause
    Routine trial2
    Routine decide
  LoopTerminator trials
  Routine end
